<?xml version="1.0" encoding="ISO-8859-1"?>
    <config>

        <!-- The starting directory. -->
        <directory type="directory">D:/Data/</directory>

        <!-- The setup name -->
        <setup_name type="string">LEO</setup_name>

        <!-- The ui type, this is 'classic' or 'detached' -->
        <ui_type type="string">classic</ui_type>

        <!--
            This has two effects:

            (1) If this is True any exception will immediately crash HAL, which can
            be useful for debugging. If it is False then some exceptions will be
            handled by the modules.

            (2) If it is False we also don't check whether messages are valid.
        -->
        <strict type="boolean">True</strict>

        <!--
            Define the modules to use for this setup.
        -->
        <modules>

        <!--
            This is the main window, you must have this.
        -->
        <hal>
            <module_name type="string">storm_control.hal4000.hal4000</module_name>
            <class_name type="string">HalController</class_name>
        </hal>

        <!--
            You also need all of these.
        -->

        <!-- Camera display. -->
        <display>
            <class_name type="string">Display</class_name>
            <module_name type="string">storm_control.hal4000.display.display</module_name>
            <parameters>
                <!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
                <colortable type="string">ramp.ctbl</colortable>
				<max_intensity type="int">65536</max_intensity>
            </parameters>
        </display>

        <!-- Feeds. -->
        <feeds>
            <class_name type="string">Feeds</class_name>
            <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
        </feeds>

        <!-- Filming and starting/stopping the camera. -->
        <film>
            <class_name type="string">Film</class_name>
            <module_name type="string">storm_control.hal4000.film.film</module_name>

            <!-- Film parameters specific to this setup go here. -->
            <parameters>
                <extension desc="Movie file name extension" type="string" values=",Red,Green,Blue"></extension>
            </parameters>
        </film>

        <!-- Which objective is being used, etc. -->
        <mosaic>
            <class_name type="string">Mosaic</class_name>
            <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

            <!-- List objectives available on this setup here. -->
            <parameters>
                <flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">True</flip_horizontal>
                <flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
                <transpose desc="Transpose image (mosaic)" type="boolean">False</transpose>
                <objective desc="Current objective" type="string" values="obj1,obj2">obj1</objective>
                <obj1 desc="Objective 1" type="custom">60x,0.108333,0.0,0.0</obj1>
                <obj2 desc="Objective 2" type="custom">4x,1.47,-62.00,-214.00</obj2>
            </parameters>
        </mosaic>

        <!-- Loading, changing and editting settings/parameters -->
        <settings>
            <class_name type="string">Settings</class_name>
            <module_name type="string">storm_control.hal4000.settings.settings</module_name>
        </settings>

        <!-- Set the time base for films. -->
        <timing>
            <class_name type="string">Timing</class_name>
            <module_name type="string">storm_control.hal4000.timing.timing</module_name>
            <parameters>
                <time_base type="string">hardware_timing</time_base> <!-- camera1,hardware_timing -->
            </parameters>
        </timing>
        <!--
            Everything else is optional, but you probably want at least one camera.
        -->
	    <!-- Hardware camera timing module -->
    <hardware_timing>
      <class_name type="string">HardwareTiming</class_name>
      <module_name type="string">storm_control.hal4000.timing.hardwareTiming</module_name>
      <configuration>
	<counter_fn_name>daq.counter.ctc_task</counter_fn_name>
	<fps type="float">10.0</fps>
	<fps_min type="float">1.0</fps_min>
	<fps_max type="float">1000.0</fps_max>
      </configuration>
    </hardware_timing> 
	
	
        <!-- Camera control. -->
        <!--
            Note that the cameras must have the names "camera1", "camera2", etc..
            Cameras are either "master" (they provide their own hardware timing)
            or "slave" they are timed by another camera. Each time the cameras
            are started the slave cameras are started first, then the master cameras.
        -->

    <camera1>
      <class_name type="string">Camera</class_name>
      <module_name type="string">storm_control.hal4000.camera.camera</module_name>
      <camera>
        <master type="boolean">False</master>
        <class_name type="string">PhotometricsCameraControl</class_name>
        <module_name type="string">storm_control.hal4000.camera.photometricsCameraControl</module_name>
        <parameters>         
          <!-- The PVCAM SDK. -->
          <pvcam_sdk type="string">C:/Windows/System32/pvcam64.dll</pvcam_sdk>
          <!-- The camera name. -->
          <camera_name type="string">PMPCIECam00</camera_name>
          <!-- These are the display defaults, not the camera range. -->
          <default_max type="int">20000</default_max> 
          <default_min type="int">100</default_min>
          <flip_horizontal type="boolean">True</flip_horizontal>
          <flip_vertical type="boolean">False</flip_vertical>
          <transpose type="boolean">False</transpose>
          <!-- This is the extension to use (if any) when saving data from this camera. -->
          <extension type="string">c1</extension>         
          <!-- Whether or not data from this camera is saved during filming. -->
		  <!--
	      What value to use for Trigger Activation, 'RisingEdge' or
	      'FallingEdge'. 'FallingEdge' is the default if not specified.
		  
		  <trigger_activation type="string">RisingEdge</trigger_activation>
	      -->
	  
          <saved type="boolean">True</saved>
        </parameters>
      </camera>
    </camera1>
	 <camera2>
		  <class_name type="string">Camera</class_name>
		  <module_name type="string">storm_control.hal4000.camera.camera</module_name>
		  <camera>
			<master type="boolean">False</master>
			<class_name type="string">PhotometricsCameraControl</class_name>
			<module_name type="string">storm_control.hal4000.camera.photometricsCameraControl</module_name>
			<parameters>         
			  <!-- The PVCAM SDK. -->
			  <pvcam_sdk type="string">C:/Windows/System32/pvcam64.dll</pvcam_sdk>
			  <!-- The camera name. -->
			  <camera_name type="string">PMPCIECam01</camera_name>
			  <!-- These are the display defaults, not the camera range. -->
			  <default_max type="int">20000</default_max> 
			  <default_min type="int">100</default_min>
			  <flip_horizontal type="boolean">False</flip_horizontal>
			  <flip_vertical type="boolean">False</flip_vertical>
			  <transpose type="boolean">False</transpose>
			  <!-- This is the extension to use (if any) when saving data from this camera. -->
			  <extension type="string">c2</extension>
			  <!-- Whether or not data from this camera is saved during filming. -->
			  <saved type="boolean">True</saved>
			  <!-- inside <camera2><camera><parameters> Qiao 08/24/2025-->
			   


			  
			</parameters>
		  </camera>
	</camera2>

        <!-- DAQ control -->
        <daq>
            <module_name type="string">storm_control.sc_hardware.nationalInstruments.nidaqModule</module_name>
            <class_name type="string">NidaqModule</class_name>

            <configuration>
                <!-- This is the default timing source to use while filming. "Oversampled"
                     films will use the counter for timing. The counter is driven by the
                     camera fire pin. Other films will just use the camera fire pin directly.
                -->
                <timing>
                    <camera_fire_pin type="string">/Dev1/PFI0</camera_fire_pin>
					<counter_out type="string">/Dev1/PFI12</counter_out>
                    <counter type="string">/Dev1/ctr1</counter>
					
                    <!--rising_edge type="boolean">True</rising_edge-->  
                </timing>
				<!--
					This counter provides the hardware time base for the cameras.
					https://github.com/ZhuangLab/storm-control/blob/ef2079373463e4a7b209b11686953d9afced30d0/storm_control/hal4000/xml/hbaic2_pgrey_config.xml
				-->
				<counter>
				  <ctc_task>
					<source type="string">/Dev1/ctr0</source>
					<frequency type="float">10</frequency>
				  </ctc_task>
				</counter>


                <!-- These are the things that we provide DAQ functionality for.
                    Other modules will request them with a 'get functionality'
                    message and "name" = "daq.xxx.yyy". -->

                <ilm750>
                    <do_task>
                        <source type="string">/Dev1/port0/line1</source>
                    </do_task>
                </ilm750>

                <ilm635>
                    <do_task>
                        <source type="string">/Dev1/port0/line2</source>
                    </do_task>
                </ilm635>

                <ilm545>
                    <do_task>
                        <source type="string">/Dev1/port0/line3</source>
                    </do_task>
                </ilm545>

                <ilm473>
                    <do_task>
                        <source type="string">/Dev1/port0/line4</source>
                    </do_task>
                </ilm473>

                <ilm408>
                    <do_task>
                        <source type="string">/Dev1/port0/line5</source>
                    </do_task>
                </ilm408>   

                <tigerz>
                    <ao_task>
                        <source type="string">/Dev1/ao0</source>
                    </ao_task>
                </tigerz> 

            </configuration>
        </daq>


        <!-- Illumination (lasers, shutters, etc) control GUI. -->
        <illumination>
            <class_name type="string">Illumination</class_name>
            <module_name type="string">storm_control.hal4000.illumination.illumination</module_name>
            <configuration>

                <!-- Note: The name of the channel is the gui_name. XML tags cannot start with numbers. -->

                <ch1>
                    <gui_name type="string">750</gui_name>
                    <color type="string">200,0,0</color>
                    <amplitude_modulation>
                        <hw_fn_name>Lumencor750</hw_fn_name>
                    </amplitude_modulation>
                    <digital_modulation>
                        <hw_fn_name type="string">daq.ilm750.do_task</hw_fn_name>
                    </digital_modulation>
                </ch1>
                <ch2>
                    <gui_name type="string">635</gui_name>
                    <color type="string">255,0,0</color>
                    <amplitude_modulation>
                        <hw_fn_name>Lumencor635</hw_fn_name>
                    </amplitude_modulation> 
                    <digital_modulation>
                        <hw_fn_name type="string">daq.ilm635.do_task</hw_fn_name>
                    </digital_modulation>
                </ch2>
                <ch3>
                    <gui_name type="string">545</gui_name>
                    <color type="string">124,252,0</color>
                    <amplitude_modulation>
                        <hw_fn_name>Lumencor545</hw_fn_name>
                    </amplitude_modulation>
                    <digital_modulation>
                        <hw_fn_name type="string">daq.ilm545.do_task</hw_fn_name>
                    </digital_modulation>
                </ch3>
                <ch4>
                    <gui_name type="string">473</gui_name>
                    <color type="string">0,191,255</color>
                    <amplitude_modulation>
                        <hw_fn_name>Lumencor473</hw_fn_name>
                    </amplitude_modulation>
                    <digital_modulation>
                        <hw_fn_name type="string">daq.ilm473.do_task</hw_fn_name>
                    </digital_modulation>
                </ch4>
                <ch5>
                    <gui_name type="string">408</gui_name>
                    <color type="string">0,0,255</color>
                    <amplitude_modulation>
                        <hw_fn_name>Lumencor408</hw_fn_name>
                    </amplitude_modulation>
                    <digital_modulation>
                        <hw_fn_name type="string">daq.ilm408.do_task</hw_fn_name>
                    </digital_modulation>
                </ch5>

            </configuration>
        </illumination>

            <!-- Decided on no IR control -->
         <none_irlaser>
          <module_name type="string">storm_control.sc_hardware.none.noneIRLaserModule</module_name>
          <class_name type="string">NoneIRLaserModule</class_name>
        </none_irlaser>



    <!-- Stage control GUI -->
    <stage>
      <class_name type="string">Stage</class_name>
      <module_name type="string">storm_control.hal4000.stage.stage</module_name>
      <configuration>
	<stage_functionality type="string">tiger_controller.xy_stage</stage_functionality>
      </configuration>
    </stage>

    <!-- Tiger stage controller. -->
    <tiger_controller>
      <module_name type="string">storm_control.sc_hardware.appliedScientificInstrumentation.tigerModule</module_name>
      <class_name type="string">TigerController</class_name>

      <configuration>
	<baudrate type="int">115200</baudrate>
	<port type="string">COM4</port>
	<ttl_mode type="int">22</ttl_mode>	
	<devices>
	  <xy_stage>
	    <velocity type="float">1</velocity>
	  </xy_stage>
	  <z_piezo>
	    <parameters>
	      <center type="float">250.0</center>
	      <has_center_bar type="boolean">True</has_center_bar>
	      <maximum type="float">500.0</maximum>
	      <minimum type="float">0.0</minimum>
	      <warning_high type="float">490.0</warning_high>
	      <warning_low type="float">10.0</warning_low>
	    </parameters>
	    <ao_fn_name type="string">daq.tigerz.ao_task</ao_fn_name>
	    <axis type="string">P</axis>
	    <microns_to_volts type="float">0.02</microns_to_volts>
	    <mode type="int">1</mode>
	  </z_piezo>
	  <z_stage>
	    <center type="float">0.0</center>
	    <has_center_bar type="boolean">True</has_center_bar>
	    <maximum type="float">20000.0</maximum>
	    <minimum type="float">-10000.0</minimum>
	    <warning_high type="float">9000.0</warning_high>
	    <warning_low type="float">-9000.0</warning_low>	    
	  </z_stage>
	</devices>
      </configuration>
    </tiger_controller>
      
    <!-- Z stage control GUI. -->
    <z_stage>
      <class_name type="string">ZStage</class_name>
      <module_name type="string">storm_control.hal4000.miscControl.zStage</module_name>
      <configuration>
	<z_stage_fn type="string">tiger_controller.z_stage</z_stage_fn>
	<large_step type="float">100.0</large_step>
	<retracted_z type="float">-4000.0</retracted_z>
	<small_step type="float">1.0</small_step>	
      </configuration>
    </z_stage>



        <!-- sCMOS calibration module -->
        <scmos_cal>
            <module_name type="string">storm_control.hal4000.miscControl.scmosCalibration</module_name>
            <class_name type="string">SCMOSCalibration</class_name>
        </scmos_cal>



        <!-- TCP control -->
        <tcp_control>
            <module_name type="string">storm_control.hal4000.tcpControl.tcpControl</module_name>
            <class_name type="string">TCPControl</class_name>
            <configuration>
                <parallel_mode type="boolean">True</parallel_mode>
                <tcp_port type="int">9000</tcp_port>
            </configuration>
        </tcp_control>

        <!-- Lumencor 408 laser control. -->
        <Lumencor408>
            <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
            <class_name type="string">Celesta</class_name>
            <configuration>
                <ip type="string">192.168.201.200</ip>
                <laser_id type="int">0</laser_id>
                <used_during_filming type="boolean">True</used_during_filming>
            </configuration>
        </Lumencor408>

        <!-- Lumencor 473 laser control. -->
        <Lumencor473>
            <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
            <class_name type="string">Celesta</class_name>
            <configuration>
                <ip type="string">192.168.201.200</ip>
                <laser_id type="int">1</laser_id>
                <used_during_filming type="boolean">True</used_during_filming>
            </configuration>
        </Lumencor473>

        <!-- Lumencor 545 laser control. -->
        <Lumencor545>
            <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
            <class_name type="string">Celesta</class_name>
            <configuration>
                <ip type="string">192.168.201.200</ip>
                <laser_id type="int">2</laser_id>
                <used_during_filming type="boolean">True</used_during_filming>
            </configuration>
        </Lumencor545>

        <!-- Lumencor 635 laser control. -->
        <Lumencor635>
            <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
            <class_name type="string">Celesta</class_name>
            <configuration>
                <ip type="string">192.168.201.200</ip>
                <laser_id type="int">3</laser_id>
                <used_during_filming type="boolean">True</used_during_filming>
            </configuration>
        </Lumencor635>

        <!-- Lumencor 750 laser control. -->
        <Lumencor750>
            <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
            <class_name type="string">Celesta</class_name>
            <configuration>
                <ip type="string">192.168.201.200</ip>
                <laser_id type="int">4</laser_id>
                <used_during_filming type="boolean">True</used_during_filming>
            </configuration>
        </Lumencor750> 

        <!-- Thorlabs UC480 camera for the focus lock -->
        <uc480_camera>
            <class_name type="string">UC480Camera</class_name>
            <module_name type="string">storm_control.sc_hardware.thorlabs.ucScientificCameraModule</module_name>
            <configuration>
                <parameters>
                    <offset_has_center_bar type="boolean">True</offset_has_center_bar>
                    <offset_maximum type="float">1.0</offset_maximum>
                    <offset_minimum type="float">-1.0</offset_minimum>
                    <offset_warning_high type="float">0.8</offset_warning_high>
                    <offset_warning_low type="float">-0.8</offset_warning_low>
                    <sum_maximum type="float">100000.0</sum_maximum>
                    <sum_minimum type="float">10000.0</sum_minimum>
                    <sum_warning_low type="float">20000.0</sum_warning_low>
                </parameters>
                <background type="int">70000</background>
                <camera_id type="int">1</camera_id>
                <ini_file type="string">uc480_settings.ini</ini_file>
                <offset_file type="string">C:\Software\Leo\MEGAFISH-configs\cam_offsets_megafish.txt</offset_file>
                <sigma type="float">7</sigma>
                <uc480_dll type="string">C:\Windows\System32\uc480_64.dll</uc480_dll>
                <x_width type="int">624</x_width>
                <y_width type="int">184</y_width>
                <use_storm_analysis type="boolean">True</use_storm_analysis>
                <units_to_microns type="float">0.05</units_to_microns> 
                <pixel_clock type="int">5</pixel_clock>
                <!-- Units_to microns: 0.25-25X,0.05 negative is because in the current setup the spots 
                    get closer as the objective approaches the coverslip. It should be positive 
                    if the spots get apart as the objective approaches the coverslip-->
            </configuration>
        </uc480_camera>
        <!-- Focus lock control GUI. -->
        <focuslock>
            <class_name type="string">FocusLock</class_name>
            <module_name type="string">storm_control.hal4000.focusLock.focusLock</module_name>
            <configuration>
                <ir_laser type="string">none_irlaser</ir_laser>
                <ir_power type="int">10</ir_power>
                <lock_modes type="string">HardwareZScanLockMode,NoLockMode,AlwaysOnLockMode,OptimalLockMode,CalibrationLockMode</lock_modes>
                <qpd type="string">uc480_camera</qpd>
                <z_stage type="string">tiger_controller.z_piezo</z_stage>
                <parameters>
                    <find_sum>
                        <step_size type="float">0.5</step_size> 
                    </find_sum>
                    <locked>
                        <buffer_length type="int">5</buffer_length>
                        <offset_threshold type="float">750</offset_threshold>
                    </locked>
                    <scan> <!-- from MF6 -->
                        <minimum_sum type="float">10000</minimum_sum>
                        <scan_step type="float">0.1</scan_step><!-- default is 0.5um, Qiao edit 06122025 -->
                        <offset_threshold type="float">750</offset_threshold>
                    </scan>
                    <jump_size type="float">1.5</jump_size>
                </parameters>
            </configuration>
        </focuslock>

        </modules>

    </config>
