<?xml version="1.0" encoding="ISO-8859-1"?>
<kilroy_configuration num_valves = "3" num_pumps = "1">
  <valve_commands>
    <valve_cmd name = "Set Hyb 1">
      <valve_pos valve_ID = "1" port_ID = "1"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 2">
      <valve_pos valve_ID = "1" port_ID = "2"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 3">
      <valve_pos valve_ID = "1" port_ID = "3"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 4">
      <valve_pos valve_ID = "1" port_ID = "4"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 5">
      <valve_pos valve_ID = "1" port_ID = "5"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 6">
      <valve_pos valve_ID = "1" port_ID = "6"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 7">
      <valve_pos valve_ID = "1" port_ID = "7"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 8">
      <valve_pos valve_ID = "1" port_ID = "8"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 9">
      <valve_pos valve_ID = "1" port_ID = "9"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Hyb 10">
      <valve_pos valve_ID = "1" port_ID = "10"></valve_pos>
    </valve_cmd>
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		
		
	    <valve_cmd name = "Set Readout">
      <valve_pos valve_ID = "1" port_ID = "32"></valve_pos>
    </valve_cmd>

  
    <valve_cmd name = "Set forma">
      <valve_pos valve_ID = "1" port_ID = "37"></valve_pos>
    </valve_cmd>
  
  <valve_cmd name = "Set SSC">
      <valve_pos valve_ID = "1" port_ID = "36"></valve_pos>
    </valve_cmd>
	
    <valve_cmd name = "Set Wash">
      <valve_pos valve_ID = "1" port_ID = "35"></valve_pos>
    </valve_cmd>
    <valve_cmd name = "Set Image">
     <valve_pos valve_ID = "1" port_ID = "31"></valve_pos>
    </valve_cmd>


  </valve_commands>
<!-- speed 200 ~= 833 uL / 10 sec -->
<!-- 1 uL corresponds to 1.2 pump position units -->
<!-- speed 33 corresponds to 1 mL / min -->
  <pump_commands>

     <pump_cmd name = "Flow 0.5mL">
       <pump_config position = "600" speed = "30"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 1mL">
       <pump_config position = "1200" speed = "30"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 1.5mL">
       <pump_config position = "1800" speed = "30"></pump_config>
     </pump_cmd>

     <pump_cmd name = "Flow 1.2mL">
       <pump_config position = "1600" speed = "30"></pump_config>
     </pump_cmd>

     <pump_cmd name = "Flow 2mL">
       <pump_config position = "2400" speed = "30"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 3mL">
       <pump_config position = "3600" speed = "30"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 4mL">
       <pump_config position = "4800" speed = "30"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 5mL">
       <pump_config position = "6000" speed = "30"></pump_config>
     </pump_cmd>

     <pump_cmd name = "Flow 0.5mL fast">
       <pump_config position = "600" speed = "100"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 1mL fast">
       <pump_config position = "1200" speed = "100"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 1.5mL fast">
       <pump_config position = "1800" speed = "100"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 2mL fast">
       <pump_config position = "2400" speed = "100"></pump_config>
     </pump_cmd>
	 <pump_cmd name = "Flow 2.5mL fast">
       <pump_config position = "3000" speed = "100"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 3mL fast">
       <pump_config position = "3600" speed = "100"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 4mL fast">
       <pump_config position = "4800" speed = "100"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 5mL fast">
       <pump_config position = "6000" speed = "100"></pump_config>
     </pump_cmd>
	 
	 
	  <pump_cmd name = "Flow 0.5mL slow">
       <pump_config position = "600" speed = "10"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 1mL slow">
       <pump_config position = "1200" speed = "10"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 1.5mL slow">
       <pump_config position = "1800" speed = "10"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 2mL slow">
       <pump_config position = "2400" speed = "10"></pump_config>
     </pump_cmd>
	 <pump_cmd name = "Flow 2.5mL slow">
       <pump_config position = "3000" speed = "10"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 3mL slow">
       <pump_config position = "3600" speed = "10"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 4mL slow">
       <pump_config position = "4800" speed = "10"></pump_config>
     </pump_cmd>
     <pump_cmd name = "Flow 5mL slow">
       <pump_config position = "6000" speed = "10"></pump_config>
     </pump_cmd>
	 
	 

  </pump_commands>

  <kilroy_protocols>



    <protocol name = "Flow Wash Buffer">
        <valve duration = "5">Set Wash</valve>
        <pump duration = "390">Flow 2mL</pump>
    </protocol>
	
    <protocol name = "Flow Wash Buffer big">
        <valve duration = "5">Set Wash</valve>
			<pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
    </protocol>
	
	
    <protocol name = "Flow Image Buffer">
        <valve duration = "5">Set Image</valve>
        <pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
    </protocol>
	
	
    
	   <protocol name = "Flow SSC big">
        <valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
    </protocol>  	
	
	
		   <protocol name = "Flow SSC big">
        <valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
    </protocol>  	
	
	    <protocol name = "Flow Image Buffer big">
        <valve duration = "5">Set Image</valve>
        <pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
    </protocol>    
    
	
	
	
    <protocol name = "Flow SSC">
        <valve duration = "5">Set SSC</valve>
        <pump duration = "300">Flow 1.5mL</pump>
    </protocol>  

    <protocol name = "Flow forma">
        <valve duration = "5">Set forma</valve>
        <pump duration = "180">Flow 2mL</pump>
    </protocol>  
	
	

 
  
	
	   <protocol name = "Wash 1-37 Fast">
	
    <valve duration = "5">Set Hyb 5</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 6</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 7</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 8</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 9</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 10</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 11</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 12</valve>
    <pump duration = "200">Flow 4mL fast</pump>
	<valve duration = "5">Set Hyb 13</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 14</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 15</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 16</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 17</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 18</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 19</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 20</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 21</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 22</valve>
    <pump duration = "200">Flow 4mL fast</pump>
   <valve duration = "5">Set Hyb 23</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 24</valve>
    <pump duration = "200">Flow 4mL fast</pump>
    <valve duration = "5">Set Hyb 25</valve>
    <pump duration = "200">Flow 4mL fast</pump>
	    <valve duration = "5">Set Hyb 26</valve>
    <pump duration = "200">Flow 4mL fast</pump>

	
    </protocol>
       
	   
	   
	   
	 <protocol name = "Wash 1-37 FastSmallVolume">
	<valve duration = "5">Set Hyb 1</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
	<valve duration = "5">Set Hyb 2</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
	<valve duration = "5">Set Hyb 3</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
	<valve duration = "5">Set Hyb 4</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 5</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 6</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 7</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 8</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 9</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 10</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 11</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 12</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
	<valve duration = "5">Set Hyb 13</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 14</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 15</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 16</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 17</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 18</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 19</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 20</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 21</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 22</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
   <valve duration = "5">Set Hyb 23</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 24</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
    <valve duration = "5">Set Hyb 25</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
	<valve duration = "5">Set Hyb 26</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
	<valve duration = "5">Set Hyb 27</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
	<valve duration = "5">Set Hyb 28</valve>
    <pump duration = "30">Flow 0.5mL fast</pump>
	
	
    </protocol>
          
	   
	   
	   
	   
	   
	   
	   
	   
	   
  
	

	

    <protocol name = "StripFormamide big">
           <valve duration = "5">Set forma</valve>
			<pump duration = "400">Flow 1mL</pump>
			<pump duration = "400">Flow 1mL</pump>
			<pump duration = "400">Flow 1mL</pump>
			<pump duration = "400">Flow 1mL</pump>
			<pump duration = "400">Flow 1mL</pump>			
			<pump duration = "400">Flow 1mL</pump>
			<pump duration = "400">Flow 1mL</pump>
			<pump duration = "400">Flow 1mL</pump>
			<pump duration = "400">Flow 1mL</pump>
			<pump duration = "400">Flow 1mL</pump>
			
			<valve duration = "5">Set SSC</valve>
			<pump duration = "400">Flow 1mL</pump>
			<pump duration = "400">Flow 1mL</pump>
			<pump duration = "400">Flow 1mL</pump>
			<pump duration = "400">Flow 1mL</pump>
			<pump duration = "400">Flow 1mL</pump>
			
			
	 </protocol>




<protocol name = "Flow Readout slow">
     	    
				
               
				<valve duration = "5">Set Readout</valve>
                <pump duration = "450">Flow 1.5mL slow</pump>
                <pump duration = "450">Flow 1.5mL slow</pump>
				<pump duration = "450">Flow 1.5mL slow</pump>
                <pump duration = "450">Flow 1.5mL slow</pump>

              
         </protocol>


<protocol name = "Hybridize Readout big">
     	    
				
                 <valve duration = "5">Set Readout</valve>
				<pump duration = "500">Flow 2mL</pump>
				<pump duration = "500">Flow 2mL</pump>
                <pump duration = "2840">Flow 2mL</pump>
				
                <valve duration = "5">Set Wash</valve>
                <pump duration = "500">Flow 2mL</pump>
                <pump duration = "500">Flow 2mL</pump>
				<pump duration = "500">Flow 2mL</pump>

                <valve duration = "5">Set SSC</valve>
                <pump duration = "500">Flow 2mL</pump>
                <pump duration = "500">Flow 2mL</pump>
				<pump duration = "500">Flow 2mL</pump>
                
                <valve duration = "5">Set Image</valve>
                <pump duration = "500">Flow 2mL</pump>
                <pump duration = "500">Flow 2mL</pump>
         </protocol>


<protocol name = "Hybridize Readout only big">

				
                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>

					                
                <valve duration = "5">Set Readout</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "3000">Flow 1.5mL</pump>


                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>

                <valve duration = "5">Set SSC</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

                
                <valve duration = "5">Set Image</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

             </protocol>
			 
                            

<protocol name = "Hybridize 1 big">
                <valve duration = "5">Set Hyb 1</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "3000">Flow 1.5mL</pump>
				
                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>

					                
                <valve duration = "5">Set Readout</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "3000">Flow 1.5mL</pump>


                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>

                <valve duration = "5">Set SSC</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

                
                <valve duration = "5">Set Image</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

             </protocol>
			 
			 
			 
			 
			 
			 
			 
			 
			 <protocol name = "Hybridize 2 big">
                <valve duration = "5">Set Hyb 2</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "3000">Flow 1.5mL</pump>
				
                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>

					                
                <valve duration = "5">Set Readout</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "3000">Flow 1.5mL</pump>


                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>

                <valve duration = "5">Set SSC</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

                
                <valve duration = "5">Set Image</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

             </protocol>
			 
			 
			 
			 
			 
			 
			 
			 
			 <protocol name = "Hybridize 3 big">
                <valve duration = "5">Set Hyb 3</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "3000">Flow 1.5mL</pump>
				
                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>

					                
                <valve duration = "5">Set Readout</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "3000">Flow 1.5mL</pump>


                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>

                <valve duration = "5">Set SSC</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

                
                <valve duration = "5">Set Image</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

             </protocol>
			 
			 
			 
			 
			 
			 
			 
			 
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			 
			 
			<protocol name = "Hybridize 4 RC big">
                <valve duration = "5">Set Hyb 29</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				
                <pump duration = "4000">Flow 1.5mL</pump>
				
                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>

					                
                <valve duration = "5">Set Hyb 30</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "4000">Flow 1.5mL</pump>


                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
				
				
				<valve duration = "5">Set forma</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
				
				
				<valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
				
				<valve duration = "5">Set Readout</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "3000">Flow 1.5mL</pump>

                <valve duration = "5">Set SSC</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

                
                <valve duration = "5">Set Image</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                

             </protocol>
			 
			 
			 
			 
			 
			 
			 
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			 
			 
			 
			 
			 
			 			 
			 <protocol name = "Hybridize 5 big rest">

				
                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>

					                
                <valve duration = "5">Set Readout</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "3000">Flow 1.5mL</pump>


                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>

                <valve duration = "5">Set SSC</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

                
                <valve duration = "5">Set Image</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

             </protocol>
			 
			 
			 
			 
			 
			 
			 
			 
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			 
			 
			 
			 
			 	 <protocol name = "Hybridize 7 big rest">
               
					                
                <valve duration = "5">Set Readout</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "3000">Flow 1.5mL</pump>


                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>

                <valve duration = "5">Set SSC</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

                
                <valve duration = "5">Set Image</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

             </protocol>
			 
			 
			 
			 
			 
			 
			 
			 
			 
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





	
			 
					 
			 <protocol name = "RC Remove SYFP">
                <valve duration = "5">Set Hyb 29</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "18000">Flow 1.5mL</pump>
				
                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>


                <valve duration = "5">Set Hyb 33</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "18000">Flow 1.5mL</pump>
				
                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
					                
                <valve duration = "5">Set Readout</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "3000">Flow 1.5mL</pump>


                <valve duration = "5">Set Wash</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>

                <valve duration = "5">Set SSC</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

                
                <valve duration = "5">Set Image</valve>
                <pump duration = "450">Flow 1mL</pump>
                <pump duration = "450">Flow 1mL</pump>
				<pump duration = "450">Flow 1mL</pump>
                <pump duration = "450">Flow 1mL</pump>

             </protocol>
			 
			 
			 	 
			 
			 
			 
			 
			 
			 
			 
			 
			 
			 
			 
			 
			 
			 
			 
	
			
			
			
<protocol name = "StripFormamide_original">
           <valve duration = "5">Set forma</valve>
			<pump duration = "300">Flow 2mL</pump>
            <pump duration = "300">Flow 2mL</pump>
			<pump duration = "500">Flow 2mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 2mL</pump>
			<pump duration = "300">Flow 2mL</pump>
			<pump duration = "300">Flow 2mL</pump>
	 </protocol>
	 
<protocol name = "StripFormamide">
           <valve duration = "5">Set forma</valve>
			<pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
            <pump duration = "300">Flow 1mL</pump>
			<pump duration = "300">Flow 1mL</pump>
			<pump duration = "500">Flow 1mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
	 </protocol>


    <protocol name = "Hybridize Readout Strip">
               <valve duration = "5">Set forma</valve>
			<pump duration = "300">Flow 2mL</pump>
            <pump duration = "300">Flow 2mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 2mL</pump>
			<pump duration = "300">Flow 2mL</pump>
            
     	<valve duration = "5">Set Readout</valve>
    	<pump duration = "1240">Flow 1.5mL</pump>
     	<valve duration = "5">Set Wash</valve>
    	<pump duration = "390">Flow 2mL</pump>
     	<valve duration = "5">Set SSC</valve><pump duration = "250">Flow 1.5mL</pump><valve duration = "5">Set Image</valve>
    	<pump duration = "200">Flow 1.5mL</pump>
     </protocol>
	 
    <protocol name = "Hybridize Readout">
     	<valve duration = "5">Set Readout</valve>
    	<pump duration = "1240">Flow 1.5mL</pump>
     	<valve duration = "5">Set Wash</valve>
    	<pump duration = "390">Flow 2mL</pump>
     	<valve duration = "5">Set SSC</valve><pump duration = "250">Flow 1.5mL</pump><valve duration = "5">Set Image</valve>
    	<pump duration = "200">Flow 1.5mL</pump>
     </protocol>
    

    
    	<protocol name = "Hybridize Antibody">

            <valve duration = "5">Set Hyb 26</valve><!-- blocking !-->
            <pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "1800">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 21</valve><!-- primary antibody !-->
			<pump duration = "7200">Flow 1.5mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 22</valve><!-- secondary antibody !-->
			<pump duration = "3600">Flow 1.5mL</pump>
            <valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set SSC</valve><pump duration = "250">Flow 1.5mL</pump><valve duration = "5">Set Image</valve>
            <pump duration = "350">Flow 1.5mL</pump>

         </protocol>
    
	
	
	
	
		<protocol name = "Hybridize EGFP Antibody">

            <valve duration = "5">Set Hyb 30</valve><!-- blocking !-->
            <pump duration = "1200">Flow 1mL</pump>
			<pump duration = "1200">Flow 1mL</pump>
			<pump duration = "1200">Flow 1mL</pump>
			<valve duration = "5">Set Hyb 33</valve><!-- primary antibody !-->
			<pump duration = "7200">Flow 1.5mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 34</valve><!-- secondary antibody !-->
			<pump duration = "3600">Flow 1.5mL</pump>
            <valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Image</valve>
            <pump duration = "350">Flow 1.5mL</pump>

         </protocol>
	
	
		 
			 
			 
			 
			 <protocol name = "Hybridize Antibody big">
                <valve duration = "5">Set Hyb 24</valve><!-- blocking !-->
                <pump duration = "500">Flow 1mL</pump>
                <pump duration = "500">Flow 1mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "1800">Flow 1.5mL</pump>
				
				<valve duration = "5">Set Hyb 25</valve><!-- primary antibody !-->
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "7200">Flow 1.5mL</pump>
				
                <valve duration = "5">Set SSC</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>


                <valve duration = "5">Set Hyb 26</valve><!-- secondary antibody !-->
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "3600">Flow 1.5mL</pump>
				
                <valve duration = "5">Set SSC</valve>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>



                <valve duration = "5">Set SSC</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

                
                <valve duration = "5">Set Image</valve>
                <pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>
				<pump duration = "450">Flow 1.5mL</pump>
                <pump duration = "450">Flow 1.5mL</pump>

             </protocol>
			 
			 
			 
			 
	
	
    
    
    	<protocol name = "Hybridize Antibody1">
          <valve duration = "5">Set forma</valve>
			<pump duration = "300">Flow 2mL</pump>
            <pump duration = "500">Flow 2mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 2mL</pump>
			<pump duration = "500">Flow 2mL</pump>
			
            <valve duration = "5">Set Hyb 23</valve><!-- blocking!-->
            <pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "1800">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 24</valve><!-- primary!-->
			<pump duration = "14400">Flow 1.5mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 29</valve><!-- secondary!-->
			<pump duration = "7200">Flow 1.5mL</pump>
            <valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Image</valve>
            <pump duration = "350">Flow 1.5mL</pump>

         </protocol>
    
       
    
    	<protocol name = "Hybridize Antibody2">
          <valve duration = "5">Set forma</valve>
			<pump duration = "300">Flow 2mL</pump>
            <pump duration = "500">Flow 2mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 2mL</pump>
			<pump duration = "500">Flow 2mL</pump>
			
            <valve duration = "5">Set Hyb 23</valve><!-- blocking!-->
            <pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "1800">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 25</valve><!-- primary!-->
			<pump duration = "14400">Flow 1.5mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 29</valve><!-- secondary!-->
			<pump duration = "7200">Flow 1.5mL</pump>
            <valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Image</valve>
            <pump duration = "350">Flow 1.5mL</pump>
			
         </protocol>
    
        
    
    	<protocol name = "Hybridize Antibody3">
          <valve duration = "5">Set forma</valve>
			<pump duration = "300">Flow 2mL</pump>
            <pump duration = "500">Flow 2mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 2mL</pump>
			<pump duration = "500">Flow 2mL</pump>
			
            <valve duration = "5">Set Hyb 23</valve><!-- blocking!-->
            <pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "1800">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 26</valve><!-- primary!-->
			<pump duration = "14400">Flow 1.5mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 30</valve><!-- secondary!-->
			<pump duration = "7200">Flow 1.5mL</pump>
            <valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Image</valve>
            <pump duration = "350">Flow 1.5mL</pump>
			
         </protocol>
          
    
    	<protocol name = "Hybridize Antibody4">
          <valve duration = "5">Set forma</valve>
			<pump duration = "300">Flow 2mL</pump>
            <pump duration = "500">Flow 2mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 2mL</pump>
			<pump duration = "500">Flow 2mL</pump>
			
            <valve duration = "5">Set Hyb 23</valve><!-- blocking!-->
            <pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "1800">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 27</valve><!-- primary!-->
			<pump duration = "14400">Flow 1.5mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 30</valve><!-- secondary!-->
			<pump duration = "7200">Flow 1.5mL</pump>
            <valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Image</valve>
            <pump duration = "350">Flow 1.5mL</pump>

         </protocol>
    
      
    	<protocol name = "Hybridize Antibody5">
          <valve duration = "5">Set forma</valve>
			<pump duration = "300">Flow 2mL</pump>
            <pump duration = "500">Flow 2mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 2mL</pump>
			<pump duration = "500">Flow 2mL</pump>
			
            <valve duration = "5">Set Hyb 23</valve><!-- blocking!-->
            <pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "1800">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 28</valve><!-- primary!-->
			<pump duration = "14400">Flow 1.5mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 30</valve><!-- secondary!-->
			<pump duration = "7200">Flow 1.5mL</pump>
            <valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Image</valve>
            <pump duration = "350">Flow 1.5mL</pump>
			
         </protocol>
  

  
     	<protocol name = "Hybridize Antibody6">
          <valve duration = "5">Set forma</valve>
			<pump duration = "300">Flow 2mL</pump>
            <pump duration = "500">Flow 2mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 2mL</pump>
			<pump duration = "500">Flow 2mL</pump>
			
            <valve duration = "5">Set Hyb 23</valve><!-- blocking!-->
            <pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "1800">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 28</valve><!-- primary!-->
			<pump duration = "14400">Flow 1.5mL</pump>
			<valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Hyb 29</valve><!-- secondary!-->
			<pump duration = "7200">Flow 1.5mL</pump>
            <valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<pump duration = "300">Flow 1.5mL</pump>
			<valve duration = "5">Set Image</valve>
            <pump duration = "350">Flow 1.5mL</pump>
			
         </protocol>   
    

        <protocol name = "Hybridize MER 1">
            <valve duration = "5">Set Hyb 1</valve>  
				<pump duration = "200">Flow 1.5mL</pump>
            <pump duration = "4600">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>



        <protocol name = "Hybridize MER 2">
            <valve duration = "5">Set Hyb 2</valve>  
				<pump duration = "200">Flow 1.5mL</pump>
            <pump duration = "4600">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>




        <protocol name = "Hybridize MER 3">
            <valve duration = "5">Set Hyb 3</valve>  
				<pump duration = "200">Flow 1.5mL</pump>
            <pump duration = "4600">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>


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

        <protocol name = "Hybridize MER 5">
            <valve duration = "5">Set Hyb 5</valve>   
				<pump duration = "200">Flow 1.5mL</pump>
            <pump duration = "4600">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>



        <protocol name = "Hybridize MER 6">
            <valve duration = "5">Set Hyb 6</valve> 
			<pump duration = "200">Flow 1.5mL</pump>			
            <pump duration = "4600">Flow 2mL</pump>
			
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>



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

        <protocol name = "Hybridize MER 8">
            <valve duration = "5">Set Hyb 8</valve>    
				<pump duration = "200">Flow 1.5mL</pump>
            <pump duration = "4600">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>



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


        <protocol name = "Hybridize MER 12">
            <valve duration = "5">Set Hyb 12</valve>   
				<pump duration = "200">Flow 1.5mL</pump>
            <pump duration = "4600">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>



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

        <protocol name = "Hybridize MER 14">
            <valve duration = "5">Set Hyb 14</valve>   
				<pump duration = "200">Flow 1.5mL</pump>
            <pump duration = "4600">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>>
         </protocol>



        <protocol name = "Hybridize MER 15">
            <valve duration = "5">Set Hyb 15</valve>   
				<pump duration = "200">Flow 1.5mL</pump>
            <pump duration = "4600">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>



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

        <protocol name = "Hybridize MER 19">
            <valve duration = "5">Set Hyb 19</valve> 
				<pump duration = "200">Flow 1.5mL</pump>
            <pump duration = "4600">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>



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

        <protocol name = "Hybridize MER 21">
            <valve duration = "5">Set Hyb 21</valve> 
				<pump duration = "200">Flow 1.5mL</pump>
            <pump duration = "4600">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>



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

        <protocol name = "Hybridize MER 23">
            <valve duration = "5">Set Hyb 23</valve> 
				<pump duration = "200">Flow 1.5mL</pump>
            <pump duration = "4600">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>



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

        <protocol name = "Hybridize MER 26">
            <valve duration = "5">Set Hyb 26</valve> 
				<pump duration = "200">Flow 1.5mL</pump>
            <pump duration = "4600">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>



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

        <protocol name = "Hybridize MER 28">
            <valve duration = "5">Set Hyb 28</valve>    
				<pump duration = "200">Flow 1.5mL</pump>
            <pump duration = "4600">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>



        <protocol name = "Hybridize MER 29">
            <valve duration = "5">Set Hyb 29</valve> 
				<pump duration = "200">Flow 1.5mL</pump>
            <pump duration = "4600">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>



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
        <protocol name = "Hybridize 1">
            <valve duration = "5">Set Hyb 1</valve>                       
            <pump duration = "1806">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>



        <protocol name = "Hybridize 2">
            <valve duration = "5">Set Hyb 2</valve>                       
            <pump duration = "1806">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>




        <protocol name = "Hybridize 3">
            <valve duration = "5">Set Hyb 3</valve>                       
            <pump duration = "1806">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>
         </protocol>


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

        <protocol name = "Hybridize 14">
            <valve duration = "5">Set Hyb 14</valve>                       
            <pump duration = "1806">Flow 2mL</pump>
			
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>

             <valve duration = "5">Set Readout</valve>
            <pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Wash</valve>
            <pump duration = "390">Flow 2mL</pump>
            
            <valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 1.5mL</pump>
			
			<valve duration = "5">Set Image</valve>
            <pump duration = "200">Flow 1.5mL</pump>>
         </protocol>



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<protocol name = "Hybridize Ab1">
           <valve duration = "5">Set forma</valve>
			<pump duration = "300">Flow 2mL</pump>
            <pump duration = "300">Flow 2mL</pump>

			<valve duration = "5">Set SSC</valve>
			<pump duration = "250">Flow 2mL</pump>
			<pump duration = "250">Flow 2mL</pump>
            
            
            <valve duration = "5">Set Hyb 28</valve>
			<pump duration = "1800">Flow 2mL</pump>
            
            <valve duration = "5">Set Hyb 29</valve>
			<pump duration = "7200">Flow 1.5mL</pump>
            
        <valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 2mL</pump>
			<pump duration = "300">Flow 2mL</pump>
            <pump duration = "300">Flow 2mL</pump>
            
        <valve duration = "5">Set Hyb 30</valve>
			<pump duration = "3600">Flow 1.5mL</pump>
            
        <valve duration = "5">Set SSC</valve>
			<pump duration = "300">Flow 2mL</pump>
			<pump duration = "300">Flow 2mL</pump>
            <pump duration = "300">Flow 2mL</pump>
            
             <valve duration = "5">Set Image</valve>
            <pump duration = "300">Flow 1.5mL</pump>
	 </protocol>



   </kilroy_protocols>
</kilroy_configuration>
